PsychoPy2experiment version="2023.2.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = norm
  Window size (pixels) = [1536, 864]
  expName = Mental Fatigue Training Session
  keyboardBackend = ioHub
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Routines
  Routine instr
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    CodeComponent js_math_fix_code
      Code Type = JS
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      Begin JS Experiment:
        //use strict

        // Code to fix reference errors in JS
        thisExp = psychoJS.experiment;
        win = psychoJS.window;
        event = psychoJS.eventManager;
        Array.prototype.append = [].push;
        document.documentElement.style.cursor = 'none';

        // Math related fixes
        //pi = Math.PI;
        //sin = Math.sin;
        //cos = Math.cos;
        //sqrt = Math.sqrt;
        randint = function(min, maxplusone) {
          return Math.floor(Math.random() * (maxplusone - min) ) + min;
        }
    CodeComponent elapsed_time
      Code Type = Auto->JS
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      Begin Experiment:
        elapsedTime = util.Clock()
      End Routine:
        psychoJS.experiment.addData('elapsed.time', elapsedTime.getTime())
    CodeComponent instructions_code
      Code Type = Auto->JS
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      Begin Experiment:
        instrDict = { "1": "Welcome to the session and thank you for volunteering to take part in this study \n\nThis session is a training session where you will learn about the different tasks that you will need to complete in the testing session.\n\n Press the right arrow on your keyboard to continue",
                      "2": "If you want to quit at any point, press the escape key. If you quit your data will not be saved and you will be asked to repeat the session \n\nPlease make sure that you are sitting comfortably in a quiet environment where you will not be interrupted. There will be multiple chances for you to take rest breaks if you need to. Please also ensure that your computer is connected to a power source and will not enter sleep mode\n\n Press the right arrow to continue, or the left arrow to go back to the previous screen",
                      "3": "Today you will learn four different tasks: \n\n1. AX-CPT \n2. n-back \n3. visual search \n4. mental rotation \n\n Press the right arrow to continue to the AX-CPT task instructions",
                      "4": "In this task you will see a series of letters one after another \n\nFor example:\n A - W - N - X \n (where - is a blank screen)\n\n The first letter will be red \n Then there will be two white letters \n The final letter will also be red \n\n Press the right arrow to continue, or the left arrow to go back to the previous screen",
                      "5": "If the first red letter is an A and the second red letter is an X, press 'k' on your keyboard. For any other combinations of letters, press 'd' \n\n For example: \n if you see A - U - N - X you should press 'k' \n if you see B - O - J - X you should press 'd' \n if you see F - D - Z - I you should press 'd' \n if you see A - L - C - Z you should press 'd' \n\n Press the right arrow to continue, or the left arrow to go back to the previous screen",
                      "6": "When you respond correctly, 'correct' will appear \n\n When you respond incorrectly, 'incorrect' will appear \n\n You must respond as quickly and accurately as possible \n\n Press 'k' to begin the five minute practice session, or press the left arrow to go back to the previous screen",
                      "7": "In this task, you will see a series of letters one after another. Your task is to decide whether the letter on the screen is the same as the one 3 letters ago \n\n If it is the same, press 'k' \n If if is not the same, press 'd' \n\n Press the right arrow to continue",
                      "8": "For example, in the sequence: \n B - F - G - B - P - B - F \n you would press \n d - d - d - k - d - d - d \n\n Press the right arrow to continue, or the left arrow to go back to the previous screen",
                      "9": "When you respond correctly, 'correct' will appear \n\n When you respond incorrectly, 'incorrect' will appear \n\n You must respond as quickly and accurately as possible \n\n Press 'k' to begin the five minute practice session, or press the left arrow to go back to the previous screen",
                      "10": "In this task you will be presented with lots of letters on a page \n\n The letters will be in different places and at different angles\n\n Press the right arrow to continue",
                      "11": "Your task is to press 'k' if the letter T is on the screen\n\n If the letter T is not on the screen, press 'd'\n\n Press the right arrow to continue, or the left arrow to go back to the previous screen",
                      "12": "You must complete this task as quickly and accurately as possible \n\n Press 'k' to begin the five minute practice session, or press the left arrow to go back to the previous screen",
                      "13": "In this task, you will see a series of pictures\n\n Each picture has two shapes in it \n\n Your task is to decide if the two shapes are the same \n\nIf the two shapes are the same, press 'k'. If the two shapes are different, press 'd' \n\nPress the right arrow to continue",
                      "14": "The way the shapes are oriented will change. Here are two matching shapes that are oriented the same way:\n\n\n\n\n\n\n\n\n\nPress the right arrow to continue, or the left arrow to go back to the previous screen",
                      "15": "Here are two matching shapes that are oriented differently:\n\n\n\n\n\n\n\n\n\nPress the right arrow to continue, or the left arrow to go back to the previous screen",
                      "16": "Here are two shapes that do not match:\n\n\n\n\n\n\n\n\n\nPress the right arrow to continue, or the left arrow to go back to the previous screen",
                      "17": "When you respond correctly, 'correct' will appear \n\n When you respond incorrectly, 'incorrect' will appear \n\n You must respond as quickly and accurately as possible \n\n Press 'k' to begin the five minute practice session, or press the left arrow to go back to the previous screen \n\n Please note there may be a delay while this task loads"
        }


        currentInstr = 1
      End Routine:
        print(key_resp.keys)

        if key_resp.keys == "left":
            currentInstr = int(currentInstr) - 1
        elif key_resp.keys == "right":
            currentInstr = int(currentInstr) + 1

        if currentInstr == 0:
            currentInstr = 1  # can't go lower than

        if currentInstr == 4:
            currentLoop.finished = True

        currentInstr = str(currentInstr)
    CodeComponent centerAlignMaster
      Code Type = Auto->JS
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      Begin Routine:
        instrHeaderText.setAlignHoriz('center')
        text.setAlignHoriz('center')

        instrHeaderText_2.setAlignHoriz('center')
        text_2.setAlignHoriz('center')

        restBreak1Text.setAlignHoriz('center')

        instrHeaderText_3.setAlignHoriz('center')
        text_3.setAlignHoriz('center')

        restBreak2Text.setAlignHoriz('center')

        instrHeaderText_4.setAlignHoriz('center')
        text_4.setAlignHoriz('center')

        restBreak3Text.setAlignHoriz('center')

        instrHeaderText_5.setAlignHoriz('center')
        text_5.setAlignHoriz('center')

        end_text.setAlignHoriz('center')
    KeyboardComponent key_resp
      allowedKeys = "left", "right"
      forceEndRoutine = True
      startVal [time (s)] = 0
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    TextComponent instrHeaderText
      letterHeight = 0.1
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      text = Introduction
      units = norm
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    TextComponent text
      letterHeight = 0.075
      startVal [time (s)] = 0
      text [set every repeat] = $instrDict[currentInstr]
      units = norm
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  Routine instrAXCPT
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    CodeComponent elapsed_timer
      Code Type = Auto->JS
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      End Routine:
        psychoJS.experiment.addData('elapsed.time', elapsedTime.getTime())
    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        print(key_resp_2.keys)

        if key_resp_2.keys == "left":
            currentInstr = int(currentInstr) - 1
        elif key_resp_2.keys == "right":
            currentInstr = int(currentInstr) + 1

        if currentInstr == 3:
            currentInstr = 4  # can't go lower than 4

        if currentInstr == 7:
            currentInstr = 6  # can't go higher than 6

        if key_resp_2.keys == "k":
            currentLoop.finished = True
    KeyboardComponent key_resp_2
      allowedKeys = "left", "right", "k"
      forceEndRoutine = True
      startVal [time (s)] = 0
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    TextComponent instrHeaderText_2
      letterHeight = 0.1
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      text = AX-CPT Instructions
      units = norm
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    TextComponent text_2
      letterHeight = 0.075
      startVal [time (s)] = 0
      text [set every repeat] = $instrDict[currentInstr]
      units = norm
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  Routine timer
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    CodeComponent timer_code
      Code Type = Auto->JS
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      Begin Experiment:
        probeVal = []
      Each Frame:
        if loopTimer.getTime() > 300:
            currentLoop.finished = True
      End Routine:
        psychoJS.experiment.addData('elapsed.time', elapsedTime.getTime())
    TextComponent timer_text
      letterHeight = 0.3
      opacity = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = x
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  Routine AXCPTtrial
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    CodeComponent AXCPTtrial_code
      Code Type = Both
      Begin Experiment:
        Bletters = ["B", "C", "D", "E", "F", "G", "H", "I", "J", "K", "L", "M", "N", "O", "P", "Q", "R", "S", "T", "U", "V", "W", "X", "Z"];
        Yletters = ["A", "B", "C", "D", "E", "F", "G", "H", "I", "J", "K", "L", "M", "N", "O", "P", "Q", "R", "S", "T", "U", "V", "W", "Z"];
        distractors = ["A", "B", "C", "D", "E", "F", "G", "H", "I", "J", "K", "L", "M", "N", "O", "P", "Q", "R", "S", "T", "U", "V", "W", "X", "Z"];
      Begin JS Experiment:
        Bletters = ["B", "C", "D", "E", "F", "G", "H", "I", "J", "K", "L", "M", "N", "O", "P", "Q", "R", "S", "T", "U", "V", "W", "X", "Z"];
        Yletters = ["A", "B", "C", "D", "E", "F", "G", "H", "I", "J", "K", "L", "M", "N", "O", "P", "Q", "R", "S", "T", "U", "V", "W", "Z"];
        distractors = ["A", "B", "C", "D", "E", "F", "G", "H", "I", "J", "K", "L", "M", "N", "O", "P", "Q", "R", "S", "T", "U", "V", "W", "X", "Z"];

        function choice(arr) {
          return arr[Math.floor(Math.random() * arr.length)];
        }
      Begin JS Routine:
        function choice(arr) {
          return arr[Math.floor(Math.random() * arr.length)];
        }

        distractor1Val = choice(distractors);
        distractor2Val = choice(distractors);
        if ((trialType === "target")) {
            cueVal = "A";
            probeVal = "X";
        } else {
            if ((trialType === "probeWrong")) {
                cueVal = "A";
                probeVal = choice(Yletters);
            } else {
                if ((trialType === "cueWrong")) {
                    cueVal = choice(Bletters);
                    probeVal = "X";
                } else {
                    if ((trialType === "bothWrong")) {
                        cueVal = choice(Bletters);
                        probeVal = choice(Yletters);
                    }
                }
            }
        }
      Begin Routine:
        #function choice(arr) {
        #  return arr[Math.floor(Math.random() * arr.length)];
        #}

        distractor1Val = choice(distractors)
        distractor2Val = choice(distractors)



        if trialType == 'target':
            cueVal = 'A'
            probeVal = 'X'

        elif trialType == 'probeWrong':
            cueVal = 'A'
            probeVal = choice(Yletters)

        elif trialType == 'cueWrong':
            cueVal = choice(Bletters)
            probeVal = 'X'

        elif trialType == 'bothWrong':
            cueVal = choice(Bletters)
            probeVal = choice(Yletters)
    TextComponent cue_text
      color = $[1.000,-1.000,-1.000]
      durationEstim = 0.3
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.3
      text [set every repeat] = $cueVal
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    TextComponent break1
      letterHeight = 0.1
      opacity = 0
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 1.2
      text = x
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    TextComponent distractor1
      letterHeight = 0.15
      startVal [time (s)] = 1.5
      stopVal [time (s)] = 1.8
      text [set every repeat] = $distractor1Val
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    TextComponent break2
      letterHeight = 0.1
      opacity = 0
      startVal [time (s)] = 1.8
      stopVal [duration (s)] = 1.2
      text = x
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    TextComponent distractor2
      letterHeight = 0.15
      startVal [time (s)] = 3
      stopVal [time (s)] = 3.3
      text [set every repeat] = $distractor2Val
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    TextComponent break3
      letterHeight = 0.1
      opacity = 0
      startVal [time (s)] = 3.3
      stopVal [duration (s)] = 1.2
      text = x
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  Routine AXCPTprobe
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    TextComponent probe_text
      color = $[1.000,-1.000,-1.000]
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.3
      text [set every repeat] = $probeVal
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    KeyboardComponent AXCPT_resp
      allowedKeys = 'k', 'd'
      correctAns = $corrResponse
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 1.5
      storeCorrect = True
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  Routine AXCPTfeedback
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    CodeComponent AXCPTfeedback_code
      Code Type = Auto->JS
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      Begin Experiment:
        msg = ' '
      Begin Routine:
        if AXCPT_resp.corr:
            msg = "Correct"
        else:
            msg = "Incorrect"
    TextComponent AXCPTfeedback_text
      color = $[1.000,1.000,-1.000]
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine restBreak1
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    CodeComponent elapsed_timer_3
      Code Type = Auto->JS
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      Begin Routine:
        break1Timer = util.Clock()
      End Routine:
        psychoJS.experiment.addData('elapsed.time', elapsedTime.getTime())
        psychoJS.experiment.addData('break1.duration', break1Timer.getTime())
    TextComponent restBreak1Text
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        End of AX-CPT practice

        Please rest now if you need to or press the right arrow to continue to the next task
    KeyboardComponent restBreak1_key_resp
      allowedKeys = ['right']
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine instrNBack
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    CodeComponent elapsed_timer_6
      Code Type = Auto->JS
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      End Routine:
        psychoJS.experiment.addData('elapsed.time', elapsedTime.getTime())
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if currentInstr == 6:
            currentInstr = 7  # ensure correct instructions are showing for n-back
      End Routine:
        print(key_resp_3.keys)

        if key_resp_3.keys == "left":
            currentInstr = int(currentInstr) - 1
        elif key_resp_3.keys == "right":
            currentInstr = int(currentInstr) + 1

        if currentInstr == 6:
            currentInstr = 7  # can't go lower than 7

        if currentInstr == 10:
            currentInstr = 9  # can't go higher than 9

        if key_resp_3.keys == "k":
            currentLoop.finished = True
    KeyboardComponent key_resp_3
      allowedKeys = "left", "right", "k"
      forceEndRoutine = True
      startVal [time (s)] = 0
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    TextComponent instrHeaderText_3
      letterHeight = 0.1
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      text = N-Back Instructions
      units = norm
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    TextComponent text_3
      letterHeight = 0.075
      startVal [time (s)] = 0
      text [set every repeat] = $instrDict[currentInstr]
      units = norm
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  Routine NBackFirst3Trials
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    CodeComponent NBackFirst3Trials_code
      Code Type = Auto->JS
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      Begin Experiment:
        Back2minus1=[]
        Back2minus2=[]
        Back2minus3=[]
      Begin Routine:
        letters = ['B', 'C', 'D', 'F', 'G', 'H', 'J', 'K', 'L', 'M', 'N', 'P', 'Q', 'R', 'S', 'T', 'V', 'W', 'X', 'Z']
        nletter=choice(letters)
      End Routine:
        Back2minus3=Back2minus2
        Back2minus2=Back2minus1
        Back2minus1=nletter
    TextComponent NBackText_1
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 2
      text [set every repeat] = $nletter
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    KeyboardComponent NBack_resp_1
      allowedKeys = 'k', 'd'
      correctAns = $corrResponse
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 2
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  Routine NBackRemainderTrials
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    CodeComponent NBackTrials_code
      Code Type = Both
      Begin JS Routine:
        function choice(arr) {
          return arr[Math.floor(Math.random() * arr.length)];
        }

        if ((trialType === "nonTarget")) {
            letters = ["B", "C", "D", "F", "G", "H", "J", "K", "L", "M", "N", "P", "Q", "R", "S", "T", "V", "W", "X", "Z"];
            nletter = choice(letters);
            if ((nletter === Back2minus1)) {
                nletter = choice(letters);
            }
            if ((nletter === Back2minus2)) {
                nletter = choice(letters);
            }
        } else {
            if ((trialType === "target")) {
                nletter = Back2minus3;
            }
        }
      Begin Routine:
        if trialType=='nonTarget':
            letters = ['B', 'C', 'D', 'F', 'G', 'H', 'J', 'K', 'L', 'M', 'N', 'P', 'Q', 'R', 'S', 'T', 'V', 'W', 'X', 'Z']
            nletter=choice(letters)
            if nletter==Back2minus1:
                    nletter=choice(letters)
            if nletter==Back2minus2:
                    nletter=choice(letters)
        elif trialType=='target':
            nletter=Back2minus3
      End JS Routine:
        Back2minus3 = Back2minus2;
        Back2minus2 = Back2minus1;
        Back2minus1 = nletter;
      End Routine:
        Back2minus3=Back2minus2
        Back2minus2=Back2minus1
        Back2minus1=nletter
    TextComponent NBackText_2
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 2
      text [set every repeat] = $nletter
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    KeyboardComponent NBack_resp_2
      allowedKeys = 'k', 'd'
      correctAns = $corrResponse
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 2
      storeCorrect = True
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  Routine restBreak2
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    CodeComponent elapsed_timer_4
      Code Type = Auto->JS
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      Begin Routine:
        break2Timer = util.Clock()
      End Routine:
        psychoJS.experiment.addData('elapsed.time', elapsedTime.getTime())
        psychoJS.experiment.addData('break2.duration', break2Timer.getTime())
    TextComponent restBreak2Text
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        End of N-Back practice

        Please rest now if you need to or press the right arrow to continue to the next task
    KeyboardComponent restBreak2_key_resp
      allowedKeys = ['right']
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine restBreak3
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    CodeComponent elapsed_timer_5
      Code Type = Auto->JS
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      Begin Routine:
        break3Timer = util.Clock()
      End Routine:
        psychoJS.experiment.addData('elapsed.time', elapsedTime.getTime())
        psychoJS.experiment.addData('break3.duration', break3Timer.getTime())
    TextComponent restBreak3Text
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        End of Visual Search Practice

        Please rest now if you need to or press the right arrow to continue to the next task
    KeyboardComponent restBreak3_key_resp
      allowedKeys = ['right']
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine instrMentRot
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    CodeComponent elapsed_timer_10
      Code Type = Auto->JS
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      End Routine:
        psychoJS.experiment.addData('elapsed.time', elapsedTime.getTime())
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        matchOpac = 0
        flipOpac = 0
        notpOpac = 0
      Begin Routine:
        if currentInstr == 12:
            currentInstr = 13  # ensure correct instructions are showing for n-back

        matchOpac = 0
        flipOpac = 0
        notpOpac = 0
      Each Frame:
        if currentInstr == 14:
                    matchOpac = 1
                    flipOpac = 0
                    notOpac = 0

        elif currentInstr == 15:
                    matchOpac = 0
                    flipOpac = 1
                    notOpac = 0

        elif currentInstr == 16:
                    matchOpac = 0
                    flipOpac = 0
                    notOpac = 1

        elif currentInstr == 17:
                    matchOpac = 0
                    flipOpac = 0
                    notOpac = 0

        elif currentInstr == 13:
                    matchOpac = 0
                    flipOpac = 0
                    notOpac = 0

        elif currentInstr == 12:
                    matchOpac = 0
                    flipOpac = 0
                    notOpac = 0

        if key_resp_5.keys == "k":
            trials.finished = True
      End Routine:
        print(key_resp_5.keys)

        if key_resp_5.keys == "left":
            currentInstr = int(currentInstr) - 1
        elif key_resp_5.keys == "right":
            currentInstr = int(currentInstr) + 1

        if currentInstr == 12:
            currentInstr = 13  # can't go lower than 10

        if currentInstr == 18:
            currentInstr = 17  # can't go higher than 12

        if key_resp_5.keys == "k":
            currentLoop.finished = True
    KeyboardComponent key_resp_5
      allowedKeys = "left", "right", "k"
      forceEndRoutine = True
      startVal [time (s)] = 0
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    TextComponent instrHeaderText_5
      letterHeight = 0.1
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      text = Mental Rotation Task Instructions
      units = norm
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    TextComponent text_5
      letterHeight = 0.075
      startVal [time (s)] = 0
      text [set every repeat] = $instrDict[currentInstr]
      units = norm
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    ImageComponent MentRotMatching
      image = 1_0.jpg
      opacity [set every frame] = matchOpac
      saveStartStop = False
      size = (0.935, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent MentRotMatchFlip
      image = 1_100.jpg
      opacity [set every frame] = flipOpac
      size = (0.935, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent MentRotNot
      image = 1_0_R.jpg
      opacity [set every frame] = notOpac
      saveStartStop = False
      size = (0.935, 0.5)
      startVal [time (s)] = 0.0
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  Routine mentRotTrial
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    ImageComponent mentRotStimulus
      image [set every repeat] = $imagefile
      size = (0.935, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.5
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    KeyboardComponent MROT_resp
      allowedKeys = 'k', 'd'
      correctAns = $corrResponse
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.5
      storeCorrect = True
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  Routine mentRotFeedback
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    CodeComponent NBackfeedback_code_2
      Code Type = Auto->JS
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      Begin Experiment:
        msg = ' '
      Begin Routine:
        if MROT_resp.corr:
            msg = "Correct"
        else:
            msg = "Incorrect"
    TextComponent NBackfeedback_text_2
      color = $[1.000,1.000,-1.000]
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine NBackFeedback
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    CodeComponent NBackfeedback_code
      Code Type = Auto->JS
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      Begin Experiment:
        msg = ' '
      Begin Routine:
        if NBack_resp_2.corr:
            msg = "Correct"
        else:
            msg = "Incorrect"
    TextComponent AXCPTfeedback_text_2
      color = $[1.000,1.000,-1.000]
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine end
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    CodeComponent elapsed_timer_12
      Code Type = Auto->JS
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      End Routine:
        psychoJS.experiment.addData('elapsed.time', elapsedTime.getTime())
    TextComponent end_text
      letterHeight = 0.075
      startVal [time (s)] = 0
      units = norm
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      text [set every repeat]:
        End of Training Session

        Thank you for completing the training session

        Please contact the experimenter now to confirm that you have completed the training session

        They will then send you the link to the testing session which you will need to complete in 48 hours' time (2 days from now)

        Please press the space bar on your keyboard to finish the session
    KeyboardComponent end_resp
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine createLoopTimer
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    CodeComponent create_timer_1_code_5
      Code Type = Auto->JS
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      Begin Routine:
        loopTimer = util.Clock()
  Routine instrSearch
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    CodeComponent elapsed_timer_8
      Code Type = Auto->JS
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      End Routine:
        psychoJS.experiment.addData('elapsed.time', elapsedTime.getTime())
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if currentInstr == 9:
            currentInstr = 10  # ensure correct instructions are showing for n-back
      End Routine:
        print(key_resp_4.keys)

        if key_resp_4.keys == "left":
            currentInstr = int(currentInstr) - 1
        elif key_resp_4.keys == "right":
            currentInstr = int(currentInstr) + 1

        if currentInstr == 9:
            currentInstr = 10  # can't go lower than 10

        if currentInstr == 13:
            currentInstr = 12  # can't go higher than 12

        if key_resp_4.keys == "k":
            currentLoop.finished = True
    KeyboardComponent key_resp_4
      allowedKeys = "left", "right", "k"
      forceEndRoutine = True
      startVal [time (s)] = 0
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    TextComponent instrHeaderText_4
      letterHeight = 0.1
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      text = Visual Search Task Instructions
      units = norm
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    TextComponent text_4
      letterHeight = 0.075
      startVal [time (s)] = 0
      text [set every repeat] = $instrDict[currentInstr]
      units = norm
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  Routine searchTrial
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    CodeComponent defineFunctionsSearch
      Code Type = JS
      Begin JS Routine:
        shuffle = util.shuffle

        function choice(arr) {
          return arr[Math.floor(Math.random() * arr.length)];
        }
    CodeComponent searchCode
      Code Type = Auto->JS
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      Begin Experiment:
        orientList = [0, 90, 180, 270]
        PosList = [[.45, -.45], [.45, -.15], [.45, .15], [.45, .45], [.15, -.45], [.15, -.15], [.15, .15], [.15, .45], [-.15, -.45], [-.15, -.15], [-.15, .15], [-.15, .45], [-.45, -.45], [-.45, -.15], [-.45, .15], [-.45, .45]]
      Begin Routine:
        shuffle(PosList)

        targetOrient = choice(orientList)
        stim2Orient = choice (orientList)
        stim3Orient = choice(orientList)
        stim4Orient = choice(orientList)
        stim5Orient = choice(orientList)
        stim6Orient = choice(orientList)
        stim7Orient = choice(orientList)
        stim8Orient = choice(orientList)
        stim9Orient = choice(orientList)
        stim10Orient = choice(orientList)
        stim11Orient = choice(orientList)
    KeyboardComponent key_resp_6
      allowedKeys = 'k', 'd'
      correctAns = $corrResponse
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent targetStim
      letterHeight = 0.15
      ori [set every repeat] = targetOrient
      pos [set every repeat] = PosList[1]
      startVal [time (s)] = 0.0
      text [set every repeat] = $targetLetter
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    TextComponent searchStim2
      letterHeight = 0.15
      ori [set every repeat] = stim2Orient
      pos [set every repeat] = PosList[2]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = L
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    TextComponent searchStim3
      letterHeight = 0.15
      ori [set every repeat] = stim3Orient
      pos [set every repeat] = PosList[3]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = L
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    TextComponent searchStim4
      letterHeight = 0.15
      ori [set every repeat] = stim4Orient
      pos [set every repeat] = PosList[4]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = L
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    TextComponent searchStim5
      letterHeight = 0.15
      ori [set every repeat] = stim5Orient
      pos [set every repeat] = PosList[5]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = L
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    TextComponent searchStim6
      letterHeight = 0.15
      ori [set every repeat] = stim6Orient
      pos [set every repeat] = PosList[6]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = L
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    TextComponent searchStim7
      letterHeight = 0.15
      ori [set every repeat] = stim7Orient
      pos [set every repeat] = PosList[7]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = L
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    TextComponent searchStim8
      letterHeight = 0.15
      ori [set every repeat] = stim8Orient
      pos [set every repeat] = PosList[8]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = L
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    TextComponent searchStim9
      letterHeight = 0.15
      ori [set every repeat] = stim9Orient
      pos [set every repeat] = PosList[9]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = L
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    TextComponent searchStim10
      letterHeight = 0.15
      ori [set every repeat] = stim10Orient
      pos [set every repeat] = PosList[10]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = L
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    TextComponent searchStim11
      letterHeight = 0.15
      ori [set every repeat] = stim11Orient
      pos [set every repeat] = PosList[11]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = L
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  Routine searchFeedback
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    CodeComponent searchFeedback_code_3
      Code Type = Auto->JS
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      Begin Experiment:
        msg = ' '
      Begin Routine:
        if key_resp_6.corr:
            msg = "Correct"
        else:
            msg = "Incorrect"
    TextComponent searchFeedbackText
      color = $[1.000,1.000,-1.000]
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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Flow
  LoopInitiator instrLoop loopType="TrialHandler"
    loopType = sequential
    nReps = 100
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    Routine instr
  LoopTerminator instrLoop
  LoopInitiator instrAXCPTLoop loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine instrAXCPT
  LoopTerminator instrAXCPTLoop
  Routine createLoopTimer
  LoopInitiator AXCPTtrialsLoop loopType="TrialHandler"
    conditionsFile = trialType.csv
    loopType = random
    nReps = 6000
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    conditions:
      [OrderedDict([('trialNumber', 1), ('trial', 'AX'), ('cueType', 'A'), ('probeType', 'X'), ('trialType', 'target'), ('corrResponse', 'k')]),
      OrderedDict([('trialNumber', 2), ('trial', 'AX'), ('cueType', 'A'), ('probeType', 'X'), ('trialType', 'target'), ('corrResponse', 'k')]),
      OrderedDict([('trialNumber', 3), ('trial', 'AX'), ('cueType', 'A'), ('probeType', 'X'), ('trialType', 'target'), ('corrResponse', 'k')]),
      OrderedDict([('trialNumber', 4), ('trial', 'AX'), ('cueType', 'A'), ('probeType', 'X'), ('trialType', 'target'), ('corrResponse', 'k')]),
      OrderedDict([('trialNumber', 5), ('trial', 'AX'), ('cueType', 'A'), ('probeType', 'X'), ('trialType', 'target'), ('corrResponse', 'k')]),
      OrderedDict([('trialNumber', 6), ('trial', 'AX'), ('cueType', 'A'), ('probeType', 'X'), ('trialType', 'target'), ('corrResponse', 'k')]),
      OrderedDict([('trialNumber', 7), ('trial', 'AX'), ('cueType', 'A'), ('probeType', 'X'), ('trialType', 'target'), ('corrResponse', 'k')]),
      OrderedDict([('trialNumber', 8), ('trial', 'BX'), ('cueType', 'B'), ('probeType', 'X'), ('trialType', 'probeWrong'), ('corrResponse', 'd')]),
      OrderedDict([('trialNumber', 9), ('trial', 'AY'), ('cueType', 'A'), ('probeType', 'Y'), ('trialType', 'cueWrong'), ('corrResponse', 'd')]),
      OrderedDict([('trialNumber', 10), ('trial', 'BY'), ('cueType', 'B'), ('probeType', 'Y'), ('trialType', 'bothWrong'), ('corrResponse', 'd')])]
    Routine timer
    Routine AXCPTtrial
    Routine AXCPTprobe
    Routine AXCPTfeedback
  LoopTerminator AXCPTtrialsLoop
  Routine restBreak1
  Routine createLoopTimer
  LoopInitiator instrNBackLoop loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine instrNBack
  LoopTerminator instrNBackLoop
  LoopInitiator NBackTargetLoop loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine timer
    Routine NBackFirst3Trials
  LoopTerminator NBackTargetLoop
  LoopInitiator NBackTrialsLoop loopType="TrialHandler"
    conditionsFile = 2-back_loop.xlsx
    loopType = random
    nReps = 6000
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    conditions:
      [OrderedDict([('trial', 1), ('trialType', 'target'), ('corrResponse', 'k')]),
      OrderedDict([('trial', 2), ('trialType', 'target'), ('corrResponse', 'k')]),
      OrderedDict([('trial', 3), ('trialType', 'target'), ('corrResponse', 'k')]),
      OrderedDict([('trial', 4), ('trialType', 'nonTarget'), ('corrResponse', 'd')]),
      OrderedDict([('trial', 5), ('trialType', 'nonTarget'), ('corrResponse', 'd')]),
      OrderedDict([('trial', 6), ('trialType', 'nonTarget'), ('corrResponse', 'd')]),
      OrderedDict([('trial', 7), ('trialType', 'nonTarget'), ('corrResponse', 'd')]),
      OrderedDict([('trial', 8), ('trialType', 'nonTarget'), ('corrResponse', 'd')]),
      OrderedDict([('trial', 9), ('trialType', 'nonTarget'), ('corrResponse', 'd')]),
      OrderedDict([('trial', 10), ('trialType', 'nonTarget'), ('corrResponse', 'd')])]
    Routine timer
    Routine NBackRemainderTrials
    Routine NBackFeedback
  LoopTerminator NBackTrialsLoop
  Routine restBreak2
  LoopInitiator instrSearchLoop loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine instrSearch
  LoopTerminator instrSearchLoop
  Routine createLoopTimer
  LoopInitiator searchLoop loopType="TrialHandler"
    conditionsFile = visualSearchConds.csv
    loopType = random
    nReps = 6000
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    conditions:
      [OrderedDict([('cond', 'target'), ('targetLetter', 'T'), ('corrResponse', 'k')]),
      OrderedDict([('cond', 'nonTarget'), ('targetLetter', 'L'), ('corrResponse', 'd')])]
    Routine timer
    Routine searchTrial
    Routine searchFeedback
  LoopTerminator searchLoop
  Routine restBreak3
  LoopInitiator instrMentRotaLoop loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine instrMentRot
  LoopTerminator instrMentRotaLoop
  Routine createLoopTimer
  LoopInitiator mentRotTrialsLooop loopType="TrialHandler"
    conditionsFile = response.csv
    loopType = random
    nReps = 6000
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    conditions:
      [OrderedDict([('imagefile', '10_0.jpg'), ('orientation', 0), ('corrResponse', 'k')]),
      OrderedDict([('imagefile', '10_0_R.jpg'), ('orientation', 0), ('corrResponse', 'd')]),
      OrderedDict([('imagefile', '10_100.jpg'), ('orientation', 100), ('corrResponse', 'k')]),
      OrderedDict([('imagefile', '10_100_R.jpg'), ('orientation', 100), ('corrResponse', 'd')]),
      OrderedDict([('imagefile', '10_150.jpg'), ('orientation', 150), ('corrResponse', 'k')]),
      OrderedDict([('imagefile', '10_150_R.jpg'), ('orientation', 150), ('corrResponse', 'd')]),
      OrderedDict([('imagefile', '10_50.jpg'), ('orientation', 50), ('corrResponse', 'k')]),
      OrderedDict([('imagefile', '10_50_R.jpg'), ('orientation', 50), ('corrResponse', 'd')]),
      OrderedDict([('imagefile', '11_0.jpg'), ('orientation', 0), ('corrResponse', 'k')]),
      OrderedDict([('imagefile', '11_0_R.jpg'), ('orientation', 0), ('corrResponse', 'd')]),
      OrderedDict([('imagefile', '11_100.jpg'), ('orientation', 100), ('corrResponse', 'k')]),
      OrderedDict([('imagefile', '11_100_R.jpg'), ('orientation', 100), ('corrResponse', 'd')]),
      OrderedDict([('imagefile', '11_150.jpg'), ('orientation', 150), ('corrResponse', 'k')]),
      OrderedDict([('imagefile', '11_150_R.jpg'), ('orientation', 150), ('corrResponse', 'd')]),
      OrderedDict([('imagefile', '11_50.jpg'), ('orientation', 50), ('corrResponse', 'k')]),
      OrderedDict([('imagefile', '11_50_R.jpg'), ('orientation', 50), ('corrResponse', 'd')]),
      OrderedDict([('imagefile', '12_0.jpg'), ('orientation', 0), ('corrResponse', 'k')])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
    Routine timer
    Routine mentRotTrial
    Routine mentRotFeedback
  LoopTerminator mentRotTrialsLooop
  Routine end
